[
    {
        "object.className": "ProtImportMicrographs",
        "object.id": "2",
        "object.label": "REFERENCE_PROTEIN_LABEL - import micrographs",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "REFERENCE_PROTEIN_PATH",
        "filesPattern": "REFERENCE_PROTEIN_PATTERN",
        "copyFiles": false,
        "emxFile": null,
        "mdFile": null,
        "sqliteFile": null,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 200.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.0,
        "scannedPixelSize": 7.0,
        "dataStreaming": false,
        "timeout": 7200,
        "fileTimeout": 30,
        "endTokenFile": null
    },
    {
        "object.className": "ProtImportMicrographs",
        "object.id": "58",
        "object.label": "PAIRED_PROTEIN_LABEL - import micrographs",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "PAIRED_PROTEIN_PATH",
        "filesPattern": "PAIRED_PROTEIN_PATTERN",
        "copyFiles": false,
        "emxFile": null,
        "mdFile": null,
        "sqliteFile": null,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 200.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.0,
        "scannedPixelSize": 7.0,
        "dataStreaming": false,
        "timeout": 7200,
        "fileTimeout": 30,
        "endTokenFile": null
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "143",
        "object.label": "xmipp3 - manual-picking (step 1) 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "memory": 2.0,
        "inputMicrographs": "58.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "179",
        "object.label": "PAIRED_PROTEIN_LABEL - extract particles",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 1.0,
        "boxSize": 100,
        "doBorders": false,
        "doSort": true,
        "rejectionMethod": 0,
        "maxZscore": 3,
        "percentage": 5,
        "doRemoveDust": false,
        "thresholdDust": 3.5,
        "doInvert": false,
        "doFlip": false,
        "doNormalize": false,
        "normType": 2,
        "backRadius": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputCoordinates": "143.outputCoordinates"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "240",
        "object.label": "REFERENCE_PROTEIN_LABEL- extract particles",
        "object.comment": "\n",
        "runName": null,
        "runMode": 0,
        "downsampleType": 1,
        "downFactor": 1.0,
        "boxSize": 100,
        "doBorders": false,
        "doSort": true,
        "rejectionMethod": 0,
        "maxZscore": 3,
        "percentage": 5,
        "doRemoveDust": false,
        "thresholdDust": 3.5,
        "doInvert": false,
        "doFlip": false,
        "doNormalize": false,
        "normType": 2,
        "backRadius": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMicrographs": "2.outputMicrographs",
        "inputCoordinates": "143.outputCoordinates"
    },
    {
        "object.className": "XmippProtCL2DAlign",
        "object.id": "361",
        "object.label": "xmipp3 - align with cl2d",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useReferenceImage": false,
        "maximumShift": 30,
        "numberOfIterations": 10,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputParticles": "240.outputParticles"
    },
    {
        "object.className": "XmippProtCL2D",
        "object.id": "421",
        "object.label": "xmipp3 - cl2d",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfClasses": 8,
        "randomInitialization": true,
        "numberOfInitialClasses": 4,
        "numberOfIterations": 10,
        "comparisonMethod": 0,
        "clusteringMethod": 0,
        "extraParams": null,
        "doCore": true,
        "thZscore": 3.0,
        "thPCAZscore": 3.0,
        "doStableCore": true,
        "tolerance": 1,
        "computeHierarchy": false,
        "analyzeRejected": false,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputParticles": "361.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "476",
        "object.label": "create subset",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": "399",
        "sqliteFile": "Runs/000421_XmippProtCL2D/extra/level_01/level_classes.xmd_classes_selection.sqlite,",
        "outputClassName": "SetOfClasses2D",
        "inputObject": "421."
    },
    {
        "object.className": "EmanProtInitModel",
        "object.id": "512",
        "object.label": "eman2 - initial model",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "symmetry": "c30",
        "numberOfIterations": 8,
        "numberOfModels": 10,
        "shrink": 1,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "inputSet": "476.outputClasses2D"
    },
    {
        "object.className": "XmippProtProjMatch",
        "object.id": "557",
        "object.label": "xmipp3 - projection matching",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useInitialAngles": false,
        "cleanUpFiles": false,
        "doCTFCorrection": false,
        "doAutoCTFGroup": true,
        "ctfGroupMaxDiff": 0.1,
        "ctfGroupMaxResol": 5.6,
        "setOfDefocus": "",
        "paddingFactor": 2.0,
        "wienerConstant": -1.0,
        "maskType": 0,
        "maskRadius": -1,
        "numberOfIterations": 4,
        "innerRadius": "0",
        "outerRadius": "64",
        "availableMemory": 2,
        "angSamplingRateDeg": "7 5 3 2",
        "maxChangeInAngles": "1000 10 6 4",
        "perturbProjectionDirections": "0",
        "projectionMethod": 1,
        "paddingAngularProjection": 1.0,
        "kernelAngularProjection": 2,
        "maxChangeOffset": "1000 10 5",
        "search5DShift": "4x5 0",
        "search5DStep": "2",
        "doRestricSearchbyTiltAngle": false,
        "tilt0": -91.0,
        "tiltF": -91.0,
        "symmetry": "c30",
        "symmetryGroupNeighbourhood": "",
        "onlyWinner": "0",
        "discardImages": 0,
        "minimumCrossCorrelation": "0.1",
        "discardPercentage": "10",
        "discardPercentagePerClass": "10",
        "doScale": false,
        "scaleStep": "1",
        "scaleNumberOfSteps": "3",
        "projMatchingExtra": "",
        "performAlign2D": false,
        "doAlign2D": "0",
        "align2DIterNr": "4",
        "align2dMaxChangeOffset": "2x1000 2x10",
        "align2dMaxChangeRot": "2x1000 2x20",
        "reconstructionMethod": 0,
        "fourierMaxFrequencyOfInterest": 0.25,
        "fourierReconstructionExtraCommand": "",
        "artLambda": "0.2",
        "artReconstructionExtraCommand": "-k 0.5 -n 10 ",
        "wbpReconstructionExtraCommand": "",
        "doComputeResolution": true,
        "doSplitReferenceImages": "1",
        "doLowPassFilter": false,
        "useFscForFilter": true,
        "constantToAddToFiltration": "0.05",
        "constantToAddToMaxReconstructionFrequency": "0.1",
        "mpiJobSize": 2,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 8,
        "inputParticles": "361.outputParticles",
        "input3DReferences": "512.outputVolumes.3"
    },
    {
        "object.className": "ProtAlignmentAssign",
        "object.id": "668",
        "object.label": "scipion - alignment assign",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "hostName": "localhost",
        "inputParticles": "179.outputParticles",
        "inputAlignment": "557.outputParticles"
    },
    {
        "object.className": "EmanProtReconstruct",
        "object.id": "713",
        "object.label": "eman2 - reconstruct",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfIterations": 2,
        "symmetry": "c30",
        "padX": 0,
        "padY": 0,
        "dimVolX": 0,
        "dimVolY": 0,
        "dimVolZ": 0,
        "dimWriteVolX": 0,
        "dimWriteVolY": 0,
        "dimWriteVolZ": 0,
        "reconstructionMethod": 1,
        "fourierMode": 1,
        "keepSense": 0,
        "keep": 1.0,
        "doNotAutoWt": false,
        "hostName": "localhost",
        "inputParticles": "668.outputParticles"
    },
    {
        "object.className": "XmippProtCL2DAlign",
        "object.id": "760",
        "object.label": "xmipp3 - align with cl2d 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useReferenceImage": false,
        "maximumShift": 30,
        "numberOfIterations": 10,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputParticles": "179.outputParticles"
    },
    {
        "object.className": "XmippProtCL2D",
        "object.id": "820",
        "object.label": "xmipp3 - cl2d 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfClasses": 8,
        "randomInitialization": true,
        "numberOfInitialClasses": 4,
        "numberOfIterations": 10,
        "comparisonMethod": 0,
        "clusteringMethod": 0,
        "extraParams": null,
        "doCore": true,
        "thZscore": 3.0,
        "thPCAZscore": 3.0,
        "doStableCore": true,
        "tolerance": 1,
        "computeHierarchy": false,
        "analyzeRejected": false,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputParticles": "760.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "875",
        "object.label": "PAIRED_PROTEIN_LABEL Subset",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": "798",
        "sqliteFile": "Runs/000820_XmippProtCL2D/extra/level_01/level_classes.xmd_classes_selection.sqlite,",
        "outputClassName": "SetOfClasses2D",
        "inputObject": "820."
    },
    {
        "object.className": "EmanProtInitModel",
        "object.id": "973",
        "object.label": "eman2 - initial model 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "symmetry": "c9",
        "numberOfIterations": 8,
        "numberOfModels": 10,
        "shrink": 1,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "inputSet": "875.outputClasses2D"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "1018",
        "object.label": "PAIRED_PROTEIN_LABEL_top",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": "798",
        "sqliteFile": "Runs/000820_XmippProtCL2D/extra/level_01/level_classes.xmd_classes_selection.sqlite,Class003_",
        "outputClassName": "SetOfParticles",
        "inputObject": "820."
    },
    {
        "object.className": "XmippProtCL2D",
        "object.id": "1064",
        "object.label": "xmipp3 - cl2d 3",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfClasses": 4,
        "randomInitialization": true,
        "numberOfInitialClasses": 4,
        "numberOfIterations": 10,
        "comparisonMethod": 0,
        "clusteringMethod": 0,
        "extraParams": null,
        "doCore": true,
        "thZscore": 3.0,
        "thPCAZscore": 3.0,
        "doStableCore": true,
        "tolerance": 1,
        "computeHierarchy": false,
        "analyzeRejected": false,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputParticles": "1018.outputParticles"
    },
    {
        "object.className": "XmippProtProjMatch",
        "object.id": "1113",
        "object.label": "xmipp3 - projection matching 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useInitialAngles": false,
        "cleanUpFiles": false,
        "doCTFCorrection": false,
        "doAutoCTFGroup": true,
        "ctfGroupMaxDiff": 0.1,
        "ctfGroupMaxResol": 5.6,
        "setOfDefocus": "",
        "paddingFactor": 2.0,
        "wienerConstant": -1.0,
        "maskType": 0,
        "maskRadius": -1,
        "numberOfIterations": 4,
        "innerRadius": "0",
        "outerRadius": "64",
        "availableMemory": 2,
        "angSamplingRateDeg": "7 5 3 2",
        "maxChangeInAngles": "1000 10 6 4",
        "perturbProjectionDirections": "0",
        "projectionMethod": 1,
        "paddingAngularProjection": 1.0,
        "kernelAngularProjection": 2,
        "maxChangeOffset": "1000 10 5",
        "search5DShift": "4x5 0",
        "search5DStep": "2",
        "doRestricSearchbyTiltAngle": false,
        "tilt0": -91.0,
        "tiltF": -91.0,
        "symmetry": "c30",
        "symmetryGroupNeighbourhood": "",
        "onlyWinner": "0",
        "discardImages": 0,
        "minimumCrossCorrelation": "0.1",
        "discardPercentage": "10",
        "discardPercentagePerClass": "10",
        "doScale": false,
        "scaleStep": "1",
        "scaleNumberOfSteps": "3",
        "projMatchingExtra": "",
        "performAlign2D": false,
        "doAlign2D": "0",
        "align2DIterNr": "4",
        "align2dMaxChangeOffset": "2x1000 2x10",
        "align2dMaxChangeRot": "2x1000 2x20",
        "reconstructionMethod": 0,
        "fourierMaxFrequencyOfInterest": 0.25,
        "fourierReconstructionExtraCommand": "",
        "artLambda": "0.2",
        "artReconstructionExtraCommand": "-k 0.5 -n 10 ",
        "wbpReconstructionExtraCommand": "",
        "doComputeResolution": true,
        "doSplitReferenceImages": "1",
        "doLowPassFilter": false,
        "useFscForFilter": true,
        "constantToAddToFiltration": "0.05",
        "constantToAddToMaxReconstructionFrequency": "0.1",
        "mpiJobSize": 2,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 8,
        "inputParticles": "760.outputParticles",
        "input3DReferences": "973.outputVolumes.1"
    }
]