[
    {
        "object.className": "ProtImportMicrographs",
        "object.id": "2",
        "object.label": "scipion - import micrographs",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/home/laboleb/ipsbsrv4/Shared/Christian/lebpc22_Scipion/Cep63/",
        "filesPattern": "*.tif",
        "copyFiles": false,
        "emxFile": null,
        "mdFile": null,
        "sqliteFile": null,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 200.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.0,
        "scannedPixelSize": 7.0,
        "dataStreaming": false,
        "timeout": 7200,
        "fileTimeout": 30,
        "endTokenFile": null
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "66",
        "object.label": "xmipp3 - manual-picking (step 1)",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "memory": 2.0,
        "inputMicrographs": "2.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "104",
        "object.label": "xmipp3 - extract particles",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 1.0,
        "boxSize": 100,
        "doBorders": false,
        "doSort": false,
        "rejectionMethod": 0,
        "maxZscore": 3,
        "percentage": 5,
        "doRemoveDust": false,
        "thresholdDust": 5.0,
        "doInvert": false,
        "doFlip": false,
        "doNormalize": false,
        "normType": 2,
        "backRadius": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputCoordinates": "66.outputCoordinates"
    },
    {
        "object.className": "XmippProtCL2DAlign",
        "object.id": "170",
        "object.label": "xmipp3 - align with cl2d",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useReferenceImage": false,
        "maximumShift": 10,
        "numberOfIterations": 10,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputParticles": "104.outputParticles"
    },
    {
        "object.className": "XmippProtCL2D",
        "object.id": "234",
        "object.label": "xmipp3 - cl2d",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "numberOfClasses": 15,
        "randomInitialization": true,
        "numberOfInitialClasses": 4,
        "numberOfIterations": 10,
        "comparisonMethod": 0,
        "clusteringMethod": 0,
        "extraParams": null,
        "doCore": true,
        "thZscore": 3.0,
        "thPCAZscore": 3.0,
        "doStableCore": true,
        "tolerance": 1,
        "computeHierarchy": false,
        "analyzeRejected": false,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "inputParticles": "170.outputParticles"
    },
    {
        "object.className": "ProtUserSubSet",
        "object.id": "299",
        "object.label": "create subset",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "other": "209",
        "sqliteFile": "Runs/000234_XmippProtCL2D/classes2D_state.sqlite,",
        "outputClassName": "SetOfClasses2D",
        "inputObject": "234."
    },
    {
        "object.className": "EmanProtInitModel",
        "object.id": "337",
        "object.label": "eman2 - initial model",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "symmetry": "c36",
        "numberOfIterations": 8,
        "numberOfModels": 10,
        "shrink": 1,
        "hostName": "localhost",
        "numberOfThreads": 8,
        "inputSet": "299.outputClasses2D"
    },
    {
        "object.className": "XmippProtProjMatch",
        "object.id": "386",
        "object.label": "xmipp3 - projection matching",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useInitialAngles": false,
        "cleanUpFiles": false,
        "doCTFCorrection": false,
        "doAutoCTFGroup": true,
        "ctfGroupMaxDiff": 0.1,
        "ctfGroupMaxResol": 5.6,
        "setOfDefocus": "",
        "paddingFactor": 2.0,
        "wienerConstant": -1.0,
        "maskType": 0,
        "maskRadius": -1,
        "numberOfIterations": 4,
        "innerRadius": "0",
        "outerRadius": "64",
        "availableMemory": 2,
        "angSamplingRateDeg": "7 5 3 2",
        "maxChangeInAngles": "1000 10 6 4",
        "perturbProjectionDirections": "0",
        "projectionMethod": 1,
        "paddingAngularProjection": 1.0,
        "kernelAngularProjection": 2,
        "maxChangeOffset": "1000 10 5",
        "search5DShift": "4x5 0",
        "search5DStep": "2",
        "doRestricSearchbyTiltAngle": false,
        "tilt0": 0.0,
        "tiltF": 180.0,
        "symmetry": "c36",
        "symmetryGroupNeighbourhood": "",
        "onlyWinner": "0",
        "discardImages": 0,
        "minimumCrossCorrelation": "0.1",
        "discardPercentage": "10",
        "discardPercentagePerClass": "10",
        "doScale": false,
        "scaleStep": "1",
        "scaleNumberOfSteps": "3",
        "projMatchingExtra": "",
        "performAlign2D": false,
        "doAlign2D": "0",
        "align2DIterNr": "4",
        "align2dMaxChangeOffset": "2x1000 2x10",
        "align2dMaxChangeRot": "2x1000 2x20",
        "reconstructionMethod": 0,
        "fourierMaxFrequencyOfInterest": 0.25,
        "fourierReconstructionExtraCommand": "",
        "artLambda": "0.2",
        "artReconstructionExtraCommand": "-k 0.5 -n 10 ",
        "wbpReconstructionExtraCommand": "",
        "doComputeResolution": true,
        "doSplitReferenceImages": "1",
        "doLowPassFilter": false,
        "useFscForFilter": true,
        "constantToAddToFiltration": "0.05",
        "constantToAddToMaxReconstructionFrequency": "0.1",
        "mpiJobSize": 2,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 8,
        "inputParticles": "170.outputParticles",
        "input3DReferences": "337.outputVolumes.1"
    },
    {
        "object.className": "XmippProtProjMatch",
        "object.id": "502",
        "object.label": "xmipp3 - projection matching 2",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "useInitialAngles": false,
        "cleanUpFiles": false,
        "doCTFCorrection": false,
        "doAutoCTFGroup": true,
        "ctfGroupMaxDiff": 0.1,
        "ctfGroupMaxResol": 5.6,
        "setOfDefocus": "",
        "paddingFactor": 2.0,
        "wienerConstant": -1.0,
        "maskType": 0,
        "maskRadius": -1,
        "numberOfIterations": 4,
        "innerRadius": "0",
        "outerRadius": "64",
        "availableMemory": 2,
        "angSamplingRateDeg": "7 5 3 2",
        "maxChangeInAngles": "1000 10 6 4",
        "perturbProjectionDirections": "0",
        "projectionMethod": 1,
        "paddingAngularProjection": 1.0,
        "kernelAngularProjection": 2,
        "maxChangeOffset": "1000 10 5",
        "search5DShift": "4x5 0",
        "search5DStep": "2",
        "doRestricSearchbyTiltAngle": false,
        "tilt0": 0.0,
        "tiltF": 180.0,
        "symmetry": "c36",
        "symmetryGroupNeighbourhood": "",
        "onlyWinner": "0",
        "discardImages": 0,
        "minimumCrossCorrelation": "0.1",
        "discardPercentage": "10",
        "discardPercentagePerClass": "10",
        "doScale": false,
        "scaleStep": "1",
        "scaleNumberOfSteps": "3",
        "projMatchingExtra": "",
        "performAlign2D": false,
        "doAlign2D": "0",
        "align2DIterNr": "4",
        "align2dMaxChangeOffset": "2x1000 2x10",
        "align2dMaxChangeRot": "2x1000 2x20",
        "reconstructionMethod": 0,
        "fourierMaxFrequencyOfInterest": 0.25,
        "fourierReconstructionExtraCommand": "",
        "artLambda": "0.2",
        "artReconstructionExtraCommand": "-k 0.5 -n 10 ",
        "wbpReconstructionExtraCommand": "",
        "doComputeResolution": true,
        "doSplitReferenceImages": "1",
        "doLowPassFilter": false,
        "useFscForFilter": true,
        "constantToAddToFiltration": "0.05",
        "constantToAddToMaxReconstructionFrequency": "0.1",
        "mpiJobSize": 2,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 8,
        "inputParticles": "170.outputParticles",
        "input3DReferences": "337.outputVolumes.3"
    }
]